Advanced Flexibility Hub Tutorial on experimental data
You'll need to download its dataset -> scipion3 testdata --download FlexHub_Tutorials
[
    {
        "object.className": "ProtImportParticles",
        "object.id": "2",
        "object.label": "Import particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 3,
        "filesPath": "~Path to particles:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Advanced_Guide/particles_026609.star|2|pathtoparticles~",
        "filesPattern": null,
        "copyFiles": false,
        "emxFile": null,
        "alignType": 0,
        "mdFile": null,
        "starFile": "~Path to star file:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Advanced_Guide/particles_026609.star|2|pathtostar~",
        "ignoreIdColumn": false,
        "sqliteFile": null,
        "frealignLabel": null,
        "stackFile": null,
        "parFile": null,
        "lstFile": null,
        "csFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRate": 1.34,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30
    },
    {
        "object.className": "ProtImportPdb",
        "object.id": "96",
        "object.label": "Import model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputPdbData": 1,
        "pdbId": null,
        "pdbFile": "~Path to model:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Advanced_Guide/reference_model.pdb|2|pathtomodel~"
    },
    {
        "object.className": "ProtImportVolumes",
        "object.id": "134",
        "object.label": "Import volume",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~Path to map:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Advanced_Guide/reference_map.mrc|2|pathtomap~",
        "filesPattern": null,
        "copyFiles": false,
        "emdbId": null,
        "setHalfMaps": false,
        "half1map": null,
        "half2map": null,
        "samplingRate": 1.34,
        "setOrigCoord": false,
        "x": null,
        "y": null,
        "z": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30
    },
    {
        "object.className": "ProtImportMask",
        "object.id": "188",
        "object.label": "Import mask",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maskPath": "~Path to mask:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Advanced_Guide/reference_mask.mrc|2|pathtomask~",
        "samplingRate": 1.34
    },
    {
        "object.className": "TensorflowProtAngularAlignmentZernike3Deep",
        "object.id": "226",
        "object.label": "Angular align - Zernike3Deep (First run)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "referenceType": 0,
        "onlyBackbone": false,
        "boxSize": 128,
        "l1": 3,
        "l2": 2,
        "applyCTF": true,
        "ctfType": 0,
        "pad": 2,
        "architecture": 1,
        "refinePose": true,
        "epochs": 20,
        "batch_size": 32,
        "split_train": 1.0,
        "step": 1,
        "costFunction": 0,
        "maskRadius": 0.85,
        "smoothMask": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2.outputParticles",
        "inputVolume": "134.outputVolume",
        "inputVolumeMask": "188.outputMask"
    },
    {
        "object.className": "TensorflowProtAngularAlignmentZernike3Deep",
        "object.id": "283",
        "object.label": "Angular align - Zernike3Deep (Second run)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "referenceType": 0,
        "onlyBackbone": false,
        "boxSize": 128,
        "l1": 3,
        "l2": 2,
        "applyCTF": true,
        "ctfType": 0,
        "pad": 2,
        "architecture": 1,
        "refinePose": true,
        "epochs": 20,
        "batch_size": 32,
        "split_train": 1.0,
        "step": 1,
        "costFunction": 0,
        "maskRadius": 0.85,
        "smoothMask": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2.outputParticles",
        "inputVolume": "134.outputVolume",
        "inputVolumeMask": "188.outputMask"
    },
    {
        "object.className": "TensorflowProtTrainFlexConsensus",
        "object.id": "410",
        "object.label": "Train - FlexConsensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "inputSets": [
            "283.outputParticles",
            "226.outputParticles"
        ],
        "latDim": 10,
        "epochs": 100,
        "batch_size": 64,
        "split_train": 1.0,
        "hostName": "localhost",
        "numberOfThreads": 4
    },
    {
        "object.className": "TensorflowProtInteractiveFlexConsensus",
        "object.id": "451",
        "object.label": "Interactive consensus - FlexConsensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputSet": "226.outputParticles",
        "flexConsensusProtocol": "410."
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "599",
        "object.label": "Dimred space 3D (UMAP)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 0,
        "nb_umap": 5,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 1.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "451.consensusParticles"
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "771",
        "object.label": "Dimred space 3D (PCA)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 1,
        "nb_umap": 5,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 1.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "451.consensusParticles"
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "815",
        "object.label": "Dimred space 3D (DeepElastic)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 2,
        "nb_umap": 5,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 0.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "451.consensusParticles"
    },
    {
        "object.className": "ProtFlexOptimalClusters",
        "object.id": "891",
        "object.label": "Find optimal clusters",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxClusters": 15,
        "clusterMethod": 0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "451.consensusParticles"
    },
    {
        "object.className": "ProtFlexClusterSpace",
        "object.id": "957",
        "object.label": "Cluster space",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "priors": null,
        "boxSize": null,
        "particles": "599.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "1079",
        "object.label": "Selected maps",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/000957_ProtFlexClusterSpace/flexClasses_state.sqlite,",
        "outputClassName": "SetOfVolumes,Representatives",
        "inputObject": "957.flexible3DClasses"
    },
    {
        "object.className": "ChimeraProtOperate",
        "object.id": "1170",
        "object.label": "Align model to map",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": null,
        "inputPdbFiles": null,
        "extraCommands": "",
        "pdbFileToBeRefined": "96.outputPdb",
        "inputVolume": "134.outputVolume"
    },
    {
        "object.className": "XmippApplyFieldZernike3D",
        "object.id": "1210",
        "object.label": "Apply deformation field - Zernike3D",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "applyPDB": true,
        "moveBoxOrigin": false,
        "inputVolume": "1079.outputRepresentatives",
        "inputPDB": "1170.combined_model"
    },
    {
        "object.className": "TensorflowProtAngularAlignmentHetSiren",
        "object.id": "1291",
        "object.label": "Angular align - HetSIREN",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "boxSize": 128,
        "hetDim": 10,
        "applyCTF": true,
        "ctfType": 0,
        "pad": 2,
        "architecture": 0,
        "fineTune": false,
        "refinePose": true,
        "epochs": 50,
        "batch_size": 16,
        "split_train": 1.0,
        "step": 1,
        "costFunction": 0,
        "maskRadius": 0.85,
        "smoothMask": true,
        "l1Reg": 0.5,
        "filterDecoded": false,
        "numVol": 20,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2.outputParticles"
    },
    {
        "object.className": "CryoDrgnProtPreprocess",
        "object.id": "1351",
        "object.label": "Preprocess - cryoDRGN",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "usePreprocess": true,
        "doScale": true,
        "scaleSize": 128,
        "doWindow": true,
        "winSize": 0.85,
        "chunk": 100,
        "doInvert": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2.outputParticles"
    },
    {
        "object.className": "CryoDrgnProtTrain",
        "object.id": "1457",
        "object.label": "Training VAE - cryoDRGN",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doInvert": true,
        "gpuList": "0",
        "zDim": 8,
        "numEpochs": 20,
        "qLayers": 3,
        "qDim": 1024,
        "pLayers": 3,
        "pDim": 1024,
        "extraParams": "",
        "viewEpoch": 0,
        "epochNum": null,
        "ksamples": 20,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "inputParticles": "1351.outputCryoDrgnParticles"
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "1559",
        "object.label": "Dimred space 3D (UMAP)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 0,
        "nb_umap": 5,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 1.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "1457.Particles"
    },
    {
        "object.className": "TensorflowProtTrainFlexConsensus",
        "object.id": "1627",
        "object.label": "Train - FlexConsensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "inputSets": [
            "283.outputParticles",
            "226.outputParticles",
            "1291.outputParticles",
            "1457.Particles"
        ],
        "latDim": 10,
        "epochs": 100,
        "batch_size": 64,
        "split_train": 1.0,
        "hostName": "localhost",
        "numberOfThreads": 4
    },
    {
        "object.className": "ProtFlexAnnotateSpace",
        "object.id": "1707",
        "object.label": "Annotate space (3D)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "priors": null,
        "boxSize": null,
        "viewer3D": 0,
        "neighbors": 5000,
        "particles": "599.outputParticles"
    },
    {
        "object.className": "ProtFlexAnnotateSpace",
        "object.id": "1860",
        "object.label": "Annotate space (Hybrid)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "priors": null,
        "boxSize": null,
        "viewer3D": 1,
        "neighbors": 5000,
        "particles": "599.outputParticles"
    },
    {
        "object.className": "TensorflowProtInteractiveFlexConsensus",
        "object.id": "1904",
        "object.label": "Interactive consensus (CryoDRGN)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputSet": "1457.Particles",
        "flexConsensusProtocol": "1627."
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "1966",
        "object.label": "Dimred space 3D (UMAP)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 0,
        "nb_umap": 15,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 1.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "1904.consensusParticles"
    },
    {
        "object.className": "TensorflowProtInteractiveFlexConsensus",
        "object.id": "2034",
        "object.label": "Interactive consensus (Zernike3D)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputSet": "226.outputParticles",
        "flexConsensusProtocol": "1627."
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "2104",
        "object.label": "Dimred space 3D (UMAP)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 0,
        "nb_umap": 5,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 1.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "2034.consensusParticles"
    },
    {
        "object.className": "ProtFlexClusterSpace",
        "object.id": "2773",
        "object.label": "Cluster space",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "priors": null,
        "boxSize": null,
        "particles": "2104.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "2816",
        "object.label": "Selected maps",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/002773_ProtFlexClusterSpace/flexClasses_state.sqlite,",
        "outputClassName": "SetOfVolumes,Representatives",
        "inputObject": "2773.flexible3DClasses"
    },
    {
        "object.className": "XmippApplyFieldZernike3D",
        "object.id": "2871",
        "object.label": "Apply deformation field - Zernike3D",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "applyPDB": true,
        "moveBoxOrigin": false,
        "inputPDB": "1170.combined_model",
        "inputVolume": "2816.outputRepresentatives"
    },
    {
        "object.className": "ProtFlexOptimalClusters",
        "object.id": "2913",
        "object.label": "Find optimal clusters",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxClusters": 15,
        "clusterMethod": 0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "1904.consensusParticles"
    },
    {
        "object.className": "ProtFlexOptimalClusters",
        "object.id": "2947",
        "object.label": "Find optimal clusters",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxClusters": 15,
        "clusterMethod": 0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2034.consensusParticles"
    },
    {
        "object.className": "ChimeraProtOperate",
        "object.id": "4313",
        "object.label": "Merge model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": null,
        "inputPdbFiles": null,
        "extraCommands": "",
        "pdbFileToBeRefined": "96.outputPdb"
    },
    {
        "object.className": "ChimeraProtOperate",
        "object.id": "5431",
        "object.label": "Check conformations ChimeraX",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": null,
        "inputPdbFiles": [
            "2871.deformed.1",
            "2871.deformed.2",
            "2871.deformed.3",
            "2871.deformed.4",
            "2871.deformed.5"
        ],
        "extraCommands": "",
        "inputVolume": "134.outputVolume"
    },
    {
        "object.className": "XmippProtCropResizeZernikeParticles",
        "object.id": "5545",
        "object.label": "Resize Zernike3D particles (128px)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 1,
        "resizeSamplingRate": 1.0,
        "doFourier": false,
        "resizeDim": 128,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": false,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 1,
        "inputParticles": "2034.consensusParticles"
    },
    {
        "object.className": "XmippProtReconstructZART",
        "object.id": "5707",
        "object.label": "ZART with Het-Correction",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "ctfCorrected": false,
        "useZernike": true,
        "niter": 10,
        "reg": 0.0001,
        "save_pr": false,
        "mode": 0,
        "levels": 3,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "5545.outputParticlesFlex"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "5894",
        "object.label": "Particles selection 4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/002773_ProtFlexClusterSpace/flexClasses_state.sqlite,",
        "outputClassName": "SetOfParticles",
        "inputObject": "2773.flexible3DClasses"
    },
    {
        "object.className": "ProtFlexAnnotateSpace",
        "object.id": "6160",
        "object.label": "Annotate space (3D)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "priors": null,
        "boxSize": 64,
        "viewer3D": 0,
        "neighbors": 5000,
        "particles": "1966.outputParticles"
    },
    {
        "object.className": "ProtFlexAnnotateSpace",
        "object.id": "6196",
        "object.label": "Annotate space (Hybrid)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "priors": null,
        "boxSize": 64,
        "viewer3D": 1,
        "neighbors": 5000,
        "particles": "1966.outputParticles"
    },
    {
        "object.className": "XmippProtCTFCorrectWiener2D",
        "object.id": "6336",
        "object.label": "Zernike3D particles (corrected - 128px)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isIsotropic": true,
        "padding_factor": 2,
        "wiener_constant": -1.0,
        "correctEnvelope": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputParticles": "5545.outputParticlesFlex"
    },
    {
        "object.className": "XmippProtReconstructFourier",
        "object.id": "6392",
        "object.label": "Reconstruct fourier",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "symmetryGroup": "c1",
        "maxRes": -1.0,
        "pad_proj": 2,
        "pad_vol": 2,
        "legacy": false,
        "approx": true,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "6336.outputParticles"
    },
    {
        "object.className": "ProtRelionRefine3D",
        "object.id": "6445",
        "object.label": "Refine selection 4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": false,
        "is2D": false,
        "doContinue": false,
        "copyAlignment": true,
        "alignmentAsPriors": false,
        "fillRandomSubset": true,
        "maskDiameterA": -1,
        "maskZero": 0,
        "continueIter": "last",
        "solventFscMask": false,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 15.0,
        "continueMsg": "True",
        "doCTF": true,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "doImageAlignment": true,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSamplingDeg": 4,
        "relaxSymm": "",
        "useFinerSamplingFaster": false,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "skipPadding": false,
        "skipGridding": true,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "0",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "referenceVolume": "134.outputVolume",
        "inputParticles": "6537.outputParticlesFlex"
    },
    {
        "object.className": "XmippProtCropResizeParticles",
        "object.id": "6537",
        "object.label": "Particles selection 4 (128px)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doResize": true,
        "resizeOption": 1,
        "resizeSamplingRate": 1.0,
        "doFourier": false,
        "resizeDim": 128,
        "resizeFactor": 0.5,
        "resizeLevel": 0,
        "hugeFile": false,
        "doWindow": false,
        "windowOperation": 1,
        "cropSize": 0,
        "windowSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "5894.outputParticlesFlex"
    },
    {
        "object.className": "ChimeraProtOperate",
        "object.id": "6648",
        "object.label": "Check refined conformation ChimeraX",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": [
            "6445.outputVolume"
        ],
        "inputPdbFiles": null,
        "extraCommands": "",
        "inputVolume": "134.outputVolume"
    },
    {
        "object.className": "ChimeraProtOperate",
        "object.id": "6687",
        "object.label": "Check ZART vs Fourier ChimeraX",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": [
            "6392.outputVolume"
        ],
        "inputPdbFiles": null,
        "extraCommands": "",
        "inputVolume": "5707.outputVolume"
    },
    {
        "object.className": "XmippProtStatisticsZernike3D",
        "object.id": "6791",
        "object.label": "Motion statistics - Zernike3D",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "structure": "1170.combined_model",
        "particles": "5894.outputParticlesFlex"
    }
]