Advanced Flexibility Hub Tutorial on experimental data
You'll need to download its dataset -> scipion3 testdata --download FlexHub_Tutorials
[
    {
        "object.className": "ProtImportParticles",
        "object.id": "2",
        "object.label": "Import particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 4,
        "filesPath": "~Path to particles:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Starter_Guide/particles.sqlite|2|pathtoparticles~",
        "filesPattern": null,
        "copyFiles": false,
        "emxFile": null,
        "alignType": 0,
        "mdFile": null,
        "starFile": null,
        "ignoreIdColumn": false,
        "sqliteFile": "~Path to sqlite:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Starter_Guide/particles.sqlite|2|pathtosqlite~",
        "frealignLabel": null,
        "stackFile": null,
        "parFile": null,
        "lstFile": null,
        "csFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRate": 2.0,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30
    },
    {
        "object.className": "ProtImportPdb",
        "object.id": "97",
        "object.label": "Import AK structure",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputPdbData": 1,
        "pdbId": null,
        "pdbFile": "~Path to model:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Starter_Guide/AK.pdb|2|pathtomodel~"
    },
    {
        "object.className": "ProtImportVolumes",
        "object.id": "135",
        "object.label": "Import AK map",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~Path to map:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Starter_Guide/AK.vol|2|pathtomap~",
        "filesPattern": null,
        "copyFiles": false,
        "emdbId": null,
        "setHalfMaps": false,
        "half1map": null,
        "half2map": null,
        "samplingRate": 2.0,
        "setOrigCoord": false,
        "x": null,
        "y": null,
        "z": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30
    },
    {
        "object.className": "ProtImportMask",
        "object.id": "189",
        "object.label": "Import AK mask",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maskPath": "~Path to mask:|%(SCIPION_TESTS)s/FlexHub_Tutorials/Starter_Guide/AK_mask.vol|2|pathtomask~",
        "samplingRate": 2.0
    },
    {
        "object.className": "TensorflowProtAngularAlignmentZernike3Deep",
        "object.id": "227",
        "object.label": "Angular align - Zernike3Deep (Map)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "referenceType": 0,
        "onlyBackbone": false,
        "boxSize": 60,
        "l1": 3,
        "l2": 2,
        "applyCTF": true,
        "ctfType": 0,
        "pad": 4,
        "architecture": 1,
        "refinePose": true,
        "epochs": 50,
        "batch_size": 32,
        "split_train": 1.0,
        "step": 1,
        "costFunction": 0,
        "maskRadius": 0.85,
        "smoothMask": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2.outputParticles",
        "inputVolume": "135.outputVolume",
        "inputVolumeMask": "189.outputMask"
    },
    {
        "object.className": "TensorflowProtAngularAlignmentZernike3Deep",
        "object.id": "284",
        "object.label": "Angular align - Zernike3Deep (Model)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "referenceType": 1,
        "onlyBackbone": true,
        "boxSize": 60,
        "l1": 3,
        "l2": 2,
        "applyCTF": true,
        "ctfType": 0,
        "pad": 4,
        "architecture": 1,
        "refinePose": true,
        "epochs": 50,
        "batch_size": 32,
        "split_train": 1.0,
        "step": 1,
        "costFunction": 0,
        "maskRadius": 0.85,
        "smoothMask": true,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2.outputParticles",
        "inputStruct": "97.outputPdb"
    },
    {
        "object.className": "TensorflowProtPredictZernike3Deep",
        "object.id": "701",
        "object.label": "Predict - Zernike3Deep (Model)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "convertBinary": false,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "2.outputParticles",
        "zernikeProtocol": "284."
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "768",
        "object.label": "Dimred space 3D (PCA)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 1,
        "nb_umap": 5,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 1.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "1261.consensusParticles"
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "812",
        "object.label": "Dimred space 3D (UMAP)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 0,
        "nb_umap": 30,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 10.0,
        "end_power": 1.0,
        "vae_sigma": 1.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "1261.consensusParticles"
    },
    {
        "object.className": "ProtFlexDimRedSpace",
        "object.id": "920",
        "object.label": "Dimred space 3D (DeepElastic)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "mode": 2,
        "nb_umap": 5,
        "epochs_umap": 1000,
        "densmap_umap": false,
        "clusters": 10,
        "init_power": 2.0,
        "end_power": 0.0,
        "vae_sigma": 0.0,
        "loss_lambda": 1.0,
        "dimensions": 1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "particles": "1261.consensusParticles"
    },
    {
        "object.className": "TensorflowProtTrainFlexConsensus",
        "object.id": "1156",
        "object.label": "Train - FlexConsensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "inputSets": [
            "284.outputParticles",
            "227.outputParticles"
        ],
        "latDim": 10,
        "epochs": 100,
        "batch_size": 64,
        "split_train": 1.0,
        "hostName": "localhost",
        "numberOfThreads": 4
    },
    {
        "object.className": "TensorflowProtInteractiveFlexConsensus",
        "object.id": "1261",
        "object.label": "Interactive consensus - FlexConsensus",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputSet": "227.outputParticles",
        "flexConsensusProtocol": "1156."
    },
    {
        "object.className": "ProtFlexClusterSpace",
        "object.id": "1433",
        "object.label": "Cluster space (PCA)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "priors": null,
        "boxSize": null,
        "particles": "768.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "1476",
        "object.label": "Selected states",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "other": null,
        "sqliteFile": "Runs/001433_ProtFlexClusterSpace/flexClasses_state.sqlite,",
        "outputClassName": "SetOfVolumes,Representatives",
        "inputObject": "1433.flexible3DClasses"
    },
    {
        "object.className": "XmippApplyFieldZernike3D",
        "object.id": "1531",
        "object.label": "Apply field - Zernike3D (Map)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "applyPDB": false,
        "moveBoxOrigin": false,
        "inputVolume": "1476.outputRepresentatives"
    },
    {
        "object.className": "XmippApplyFieldZernike3D",
        "object.id": "1567",
        "object.label": "Apply field - Zernike3D (Model)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "applyPDB": true,
        "moveBoxOrigin": false,
        "inputPDB": "97.outputPdb",
        "inputVolume": "1476.outputRepresentatives"
    },
    {
        "object.className": "ProtFlexOptimalClusters",
        "object.id": "1925",
        "object.label": "Find optimal clusters",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "maxClusters": 15,
        "clusterMethod": 0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "inputParticles": "1261.consensusParticles"
    },
    {
        "object.className": "XmippProtReconstructZART",
        "object.id": "1959",
        "object.label": "Reconstruct ZART (Het correction)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "ctfCorrected": false,
        "useZernike": true,
        "niter": 60,
        "reg": 0.001,
        "save_pr": false,
        "mode": 0,
        "levels": 3,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "1261.consensusParticles"
    },
    {
        "object.className": "XmippProtReconstructZART",
        "object.id": "2024",
        "object.label": "Reconstruct ZART (No het correction)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "ctfCorrected": false,
        "useZernike": false,
        "niter": 60,
        "reg": 0.001,
        "save_pr": false,
        "mode": 0,
        "levels": 3,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputParticles": "1261.consensusParticles"
    },
    {
        "object.className": "ChimeraProtOperate",
        "object.id": "2071",
        "object.label": "View ZART maps ChimeraX",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputVolumes": [
            "2024.outputVolume"
        ],
        "inputPdbFiles": null,
        "extraCommands": "",
        "inputVolume": "1959.outputVolume"
    }
]